OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Start => #1
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
Incoming stimulations=#1 -> P300 Identifier Stimulator(modified) => #2
  Start stimulation = OVTK_StimulationId_Label_00
  Stimulation base = OVTK_StimulationId_Label_01
  Number of identifiable objects = 5
  Percent of repetitions containing the target = 100
  Number of repetitions = 10
  Number of trials = 4
  Flash duration (in sec) = 0.100
  No flash duration (in sec) = 0.200
  Inter-repetition delay (in sec) = 0
  Inter-trial delay (in sec) = 5
-> P300 Identifier Target Generation (modified) => #3
  Lua Script = ${Player_ScenarioDirectory}/[2-Hybrid] AcquiredSignalFiles/[2] (add0)original-P300-identifier-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 3
-> Stimulation Filter (P300-TARGET) => #4
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-TARGET)
  Host = localhost
  Port = 20322
#4 -> 0xc73e83ec Stimulation listener (P300-TARGET)
  Log level to use = Information
Sequence stimulations=#2, Target stimulations=#3 -> P300 Identifier Card Visualisation => #7
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-identifier-card.ui
  Background color = 0,0,0
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Background Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/01.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/02.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/03.png
  Card filename = ${Player_ScenarioDirectory}/VisualizationCard/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png
  Card filename =
  Card filename =
  Card filename =
Data=#0.Signal stream, Stimulations=#2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2 -> Identity => #9
-> Stimulation Filter (P300Trial Start&Stop) => #10
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrialStart
  Stimulation range end = OVTK_StimulationId_TrialStop
-> UDP Sender (P300Trial Start&Stop)
  Host = localhost
  Port = 20326
#10 -> 0xc73e83ec Stimulation listener (P300Trial Start&Stop)
  Log level to use = Information
#2 -> Stimulation Filter (P300-Stimulation) => #13
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> UDP Sender (P300-Stimulation)
  Host = localhost
  Port = 20321
#13 -> 0xc73e83ec Stimulation listener (P300-Stimulation)
  Log level to use = Information
Input stream 1=#13, Input stream 2=#4, Input stream 3=#7, Input stream 4=#9 -> Identity => #16
#1 -> UDP Sender (Experiment Start)
  Host = localhost
  Port = 20324
Input stream 1=#0.Signal stream, Input stream 2=#1 -> Identity => #18
Input stream 1=#18.Output stream 1, Input stream 3=#16.Output stream 1, Input stream 5[2]=#16.Output stream 2, Input stream 6=#16.Output stream 3, Input stream 5[4]=#16.Output stream 4, Input stream 7=#18.Output stream 2 -> 0xc67a01dc Generic stream writer "Ch1-16(All)"
  Filename = ${Player_ScenarioDirectory}/PersonalData (ov+cfg)/[2] AcquiredSignal(Training)[$core{date}-$core{time}].ov
  Use compression = false
